CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Actin
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_target_nuc
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:Mito
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_input
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellsOutline
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CellsOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_target_edge
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
